macro "Batch Processor 9001 Action Tool - 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"{
function removeBackground(input, output, filename) {
	open(input + filename);
	run("Brightness/Contrast...");
	run("Enhance Contrast", "saturated=0.35");
	run("Apply LUT");
	run("Close");
	run("Unsharp Mask...", "radius=1 mask=0.60");
	saveAs("Tiff", output + filename);
	close();
};

/*
Dialog.create('Batch Processor 9001');
Dialog.addMessage("Please enter input and output directories \n e.g. /home/images/");
Dialog.addString("Input directory:", "");
Dialog.addString("Output directory:", "");
getDirectory("Choose Input directory");
Dialog.show();
*/

input = getDirectory("Choose Input directory");
output = getDirectory("Choose Output directory");

//input = Dialog.getString();
//output = Dialog.getString();

setBatchMode(true); 
imageList = getFileList(input);
for (i = 0; i<imageList.length; i++)
	removeBackground(input, output, imageList[i]);
setBatchMode(false);
}
